WorkflowBuilder(Version=2.9.0)
GroupWorkflow TwoToneExperiment
    Annotation "Setup Subjects"(Text="")

    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    ExternalizedMapping(BlockHitNumber, NumBlocks)
    -> GroupWorkflow "Training Subjects"
        IntProperty(Value=0)
        -> BehaviorSubject LeftHitCounter

        IntProperty(Value=0)
        -> BehaviorSubject RightHitCounter

        SubscribeSubject LeftHitCounter => #4
        SubscribeSubject RightHitCounter => #5
        #4, #5 -> Zip
        -> Add
        -> BehaviorSubject TotalHitCounter

        ExternalizedMapping(Value(DisplayName=BlockHitNumber, Category="Training Block Switching"))
        -> IntProperty(Value=30)
        -> BehaviorSubject BlockHitNumber

        ExternalizedMapping(Value(DisplayName=NumBlocks, Category="Training Block Switching"))
        -> IntProperty(Value=5)
        -> BehaviorSubject NumberOfBlocks
        -> Multiply(Operand=IntProperty(Value=2))
        -> BehaviorSubject TotalNumSides

        SubscribeSubject BlockHitNumber => #17
        SubscribeSubject NumberOfBlocks => #18
        #17, #18 -> Zip
        -> Multiply
        -> Multiply(Operand=IntProperty(Value=2))
        -> BehaviorSubject TotalHitLimit

        SubscribeSubject TotalHitCounter => #23
        SubscribeSubject TotalHitLimit => #24
        #23, #24 -> WithLatestFrom
        -> Equal
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject TerminateTrials

        SubscribeSubject TotalHitCounter => #29
        SubscribeSubject BlockHitNumber
        -> PropertyMapping(Value) => #31
        #29, #31 -> Divide(Operand=IntProperty(Value=30))
        -> BehaviorSubject TotalSideCounter

    BooleanProperty(Value=true)
    -> BehaviorSubject PreviousPort

    SubscribeSubject State => #11
    -> Condition LeftTrial
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<StateId>(Value=SoundOnLeft))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject LeftTrialCounter
    #11 -> Condition RightTrial
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<StateId>(Value=SoundOnRight))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject RightTrialCounter

    SubscribeSubject RightTrialCounter => #20
    SubscribeSubject LeftTrialCounter => #21
    #20, #21 -> CombineLatest
    -> Add
    -> BehaviorSubject TotalTrialCounter

    Annotation "Task Logic"(Text="")

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #27
    ExternalizedMapping => #28
      HoldPeriod
      "Percentage Left Trials"
      "Pulse Period(ms)"
      "Right Response Window (s)"(DisplayName="Right Timeout")
      "Right Timeout"(DisplayName="Right Penalty")
      "Left Response Window"(DisplayName="Left Timeout")
      "Left Timeout"(DisplayName=LeftPenalty)
      Trial_ITI_Lower
      Trial_ITI_Upper
      SoundOnsetDelay
      LeftToneSoundIndex
      WhiteNoiseSoundIndex
      SoundDuration
      RightToneSoundIndex
      EmptySoundIndex
    #27, #28 -> CreateObservable CreateTrial => #29
        SubscribeSubject TrialDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #3
        ExternalizedMapping(Lower(DisplayName=Trial_ITI_Lower, Category="Trial ITI"), Upper(DisplayName=Trial_ITI_Upper, Category="Trial ITI")) => #4
        #3, #4 -> IncludeWorkflow(Path=Extensions\RandomITI.bonsai, Lower=1, Upper=2)
        -> SelectMany LEDon
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke1Led)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LEDon) => #7
        ExternalizedMapping(HoldPeriod) => #8
        #7, #8 -> SelectMany StartTrial
            SubscribeSubject CenterLick => #0
            ExternalizedMapping(HoldPeriod) => #1
            #0, #1 -> SelectMany HoldPeriod
                ExternalizedMapping(DueTime(DisplayName=HoldPeriod))
                -> Timer(DueTime=PT0.2S)
                -> BooleanProperty(Value=true)
                -> GroupWorkflow Proceed => #3
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject CenterExit
                -> BooleanProperty(Value=false)
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
                -> GroupWorkflow EarlyExit => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                #3, #7 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Condition Proceed
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> SelectMany LEDoff
            WorkflowInput Source1
            -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Poke1Led)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> Take(Count=1) => #11
        ExternalizedMapping(DueTime(DisplayName=SoundOnsetDelay)) => #12
        #11, #12 -> Delay(DueTime=PT0S) => #13
        ExternalizedMapping(Value(DisplayName="Percentage Left Trials")) => #14
        #13, #14 -> Disable SelectMany SampleTrialType => #15
            SubscribeSubject TrialDistribution
            -> Bonsai.Numerics.Distributions.Sample => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=IntProperty(Value=50))
            -> WorkflowOutput
        #15, #14 -> SelectMany "SampleTrialType + Bias Correction"
            SubscribeSubject TrialDistribution
            -> Bonsai.Numerics.Distributions.Sample => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=IntProperty(Value=50))
            -> Condition BlockIfPreviousIncorrect => #4
                SubscribeSubject PreviousResponse
                -> Equal(Operand=WorkflowProperty<ResponseId>(Value=IncorrectAction))
                -> BitwiseNot
                -> WorkflowOutput
            SubscribeSubject PreviousPort
            -> Condition PassIfPreviousIncorrect => #6
                SubscribeSubject PreviousResponse
                -> Equal(Operand=WorkflowProperty<ResponseId>(Value=IncorrectAction))
                -> WorkflowOutput
            #4, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject PreviousPort => #17
        -> Condition LeftPort
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Left) => #19
        ExternalizedMapping(WhiteNoiseSoundIndex(Category=Tones)) => #20
        ExternalizedMapping(SoundDuration(Category=Tones)) => #21
        ExternalizedMapping(LeftToneSoundIndex) => #22
        ExternalizedMapping(EmptySoundIndex(Category=Tones)) => #23
        #19, #20, #21, #22, #23 -> SelectMany StimulusPresentation => #24
            WorkflowInput Source1 => #0
            ExternalizedMapping(PlaySoundOrFrequency(DisplayName=LeftToneSoundIndex, Category=Tones)) => #1
            #0, #1 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
            -> MulticastSubject Sounds
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=SoundOnLeft)
            -> MulticastSubject AllToneTick => #5
            ExternalizedMapping(DueTime(DisplayName=SoundDuration)) => #6
            #5, #6 -> Delay(DueTime=PT0.5S) => #7
            ExternalizedMapping(PlaySoundOrFrequency(DisplayName=EmptySoundIndex)) => #8
            #7, #8 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=14))
            -> MulticastSubject Sounds
            -> BooleanProperty(Value=true) => #11
            SubscribeSubject CenterExit
            -> TrialResponse(Response=EarlyExit) => #13
            ExternalizedMapping(PlaySoundOrFrequency(DisplayName=WhiteNoiseSoundIndex)) => #14
            #13, #14 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=8))
            -> MulticastSubject Sounds
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyExit)
            -> BooleanProperty(Value=false) => #18
            #11, #18 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response) => #26
        ExternalizedMapping("Left Response Window", DueTime(DisplayName="Left Timeout")) => #27
        #26, #27 -> SelectMany WaitForLick => #28
            SubscribeSubject RightLick
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT1S) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Left Response Window"))
            -> Timer(DueTime=PT5S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput

            SubscribeSubject CenterExit
            -> IncludeWorkflow(Path=Extensions\LogAnnotation.bonsai, Id=Response)
        -> Condition Hit => #29
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping("Pulse Period(ms)") => #30
        #29, #30 -> GroupWorkflow PulseValve
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=40)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LeftHit)
        -> TrialResponse(Response=LeftHit) => #33
        #28 -> Condition IncorrectAction
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
        -> TrialResponse(Response=IncorrectAction) => #36
        #28 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss)
        -> TrialResponse(Response=Miss) => #39
        #24 -> Condition Abort
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Abort)
        -> TrialResponse(Response=Abort) => #42
        #17 -> Condition RightPort
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Right) => #44
        ExternalizedMapping(RightToneSoundIndex) => #45
        #44, #45, #20, #21, #23 -> SelectMany StimulusPresentation => #46
            WorkflowInput Source1 => #0
            ExternalizedMapping(PlaySoundOrFrequency(DisplayName=RightToneSoundIndex, Category=Tones)) => #1
            #0, #1 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=3))
            -> MulticastSubject Sounds
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=SoundOnRight)
            -> MulticastSubject AllToneTick => #5
            ExternalizedMapping(DueTime(DisplayName=SoundDuration)) => #6
            #5, #6 -> Delay(DueTime=PT0.5S) => #7
            ExternalizedMapping(PlaySoundOrFrequency(DisplayName=EmptySoundIndex)) => #8
            #7, #8 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=14))
            -> MulticastSubject Sounds
            -> BooleanProperty(Value=true) => #11
            SubscribeSubject CenterExit
            -> TrialResponse(Response=EarlyExit) => #13
            ExternalizedMapping(PlaySoundOrFrequency(DisplayName=WhiteNoiseSoundIndex)) => #14
            #13, #14 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=8))
            -> MulticastSubject Sounds
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyExit)
            -> BooleanProperty(Value=false) => #18
            #11, #18 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response) => #48
        ExternalizedMapping("Right Response Window (s)", DueTime(DisplayName="Right Timeout")) => #49
        #48, #49 -> SelectMany WaitForLick => #50
            SubscribeSubject LeftLick
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT1S) => #4
            SubscribeSubject RightLick
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Right Response Window (s)"))
            -> Timer(DueTime=PT5S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput

            SubscribeSubject CenterExit
            -> IncludeWorkflow(Path=Extensions\LogAnnotation.bonsai, Id=Response)
        -> Condition Hit => #51
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #51, #30 -> GroupWorkflow PulseValve
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=40)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=RightHit)
        -> TrialResponse(Response=RightHit) => #54
        #50 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss)
        -> TrialResponse(Response=Miss) => #57
        #50 -> Condition IncorrectAction
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
        -> TrialResponse(Response=IncorrectAction) => #60
        #46 -> Condition Abort
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Abort)
        -> TrialResponse(Response=Abort) => #63
        #33, #36, #39, #42, #54, #57, #60, #63 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput

        WorkflowInput Source1

        Disable SubscribeSubject Joystick => #68
        Disable SubscribeSubject NoGo => #69
        #68, #69 -> Disable SubscribeWhen => #70
        -> Disable Take(Count=1) => #71
        #70, #71 -> Disable CombineLatest
        -> Disable Subtract
        -> Disable Bonsai.Numerics.Abs => #74
        Disable ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #75
        #74, #75 -> Disable GreaterThan(Operand=DoubleProperty(Value=5))
        -> Disable Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable PublishSubject NoGoThreshold
    Disable SubscribeSubject StartTrigger => #30
    #29, #30 -> Disable SubscribeWhen => #31
    ExternalizedMapping(Count(DisplayName="Number of Trials", Category="Experiment Control")) => #32
    #31, #32 -> Disable Take(Count=300) => #33
    Annotation "Avoid race condition"(Text="") => #34
    #33, #34 -> Delay(DueTime=PT0.001S) => #35
    SubscribeSubject TerminateTrials => #36
    #35, #36 -> TakeUntil
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #40
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #43
    #40, #43 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260211-Train6\2026-03-18T13-29-29/ResponseStat.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai) => #49
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #50
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #52
    Source1=#50, Source1=#52 -> StateTransition(Trial=10, Id=LEDon, ElapsedTime=1311584.629984) => #53
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #49 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #58
    #53 -> DistinctUntilStateChanged => #59
    #58, #59 -> Zip => #60
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/StateTransitions.csv))
    -> PropertyMapping(FileName) => #63
    #60, #63 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260211-Train6\2026-03-18T13-29-29/StateTransitions.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    SubscribeSubject Sounds
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #71
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/sounds.csv))
    -> PropertyMapping(FileName) => #74
    #71, #74 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260211-Train6\2026-03-18T13-29-29/sounds.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false

    ExternalizedMapping(Value(DisplayName=Path, Category="Experiment Control"))
    -> PropertySource<Bonsai.IO.EnumerateFiles,System.String>(MemberName=Path, Value=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test)
    -> Add(Operand=StringProperty(Value=/260211-Train6))
    -> Timestamp
    -> Format(Format={0}\{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp")
    -> BehaviorSubject Path

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    ExternalizedMapping
      "Behavior Port"(Category="Behavior Board")
      "Center Port"(Category="Behavior Board")
      "Threshold Lick Left"(Category="Behavior Board")
      "Threshold Lick Right"(Category="Behavior Board")
    -> GroupWorkflow HarpBehavior
        SubscribeSubject Commands => #0
        ExternalizedMapping(PortName(DisplayName="Behavior Port")) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM10) => #2
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> PublishSubject Timestamp
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
        -> PublishSubject StartTrigger
        ExternalizedMapping(Mask(DisplayName="Center Port")) => #7
        #2, #7 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Center
        #2 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #10
        -> MemberSelector(Selector=AnalogInput0)
        -> Bonsai.Dsp.FirFilter(Anchor=-1, Kernel="1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1") => #12
        ExternalizedMapping(Value(DisplayName="Threshold Lick Left")) => #13
        #12, #13 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=700))
        -> DistinctUntilChanged
        -> PublishSubject Left
        #10 -> MemberSelector(Selector=AnalogInput1)
        -> Bonsai.Dsp.FirFilter(Anchor=-1, Kernel="1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1") => #18
        ExternalizedMapping(Value(DisplayName="Threshold Lick Right")) => #19
        #18, #19 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=700))
        -> DistinctUntilChanged
        -> PublishSubject Right
        #2 -> MemberSelector(Selector=MessageBytes) => #23
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #26
        #23, #26 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260211-Train6\2026-03-18T13-29-29/Joystick.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

    ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category=Soundcard))
    -> GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #6
        #3, #6 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260211-Train6\2026-03-18T13-29-29/soundcard.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick

    SubscribeSubject Center
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject CenterLick

    SubscribeSubject Left
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject LeftLick

    SubscribeSubject Right
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RightLick

    SubscribeSubject Center
    -> Equal(Operand=BooleanProperty(Value=false))
    -> Condition Exit
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject CenterExit

    SubscribeSubject CenterLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickCenter)

    SubscribeSubject LeftLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickLeft)

    SubscribeSubject RightLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickRight)

    ExternalizedMapping(Filter(DisplayName="Key ValveTest", Category="Test Valves"))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false) => #117
    ExternalizedMapping(TestPulse(Category="Test Valves"), TestValve(Category="Test Valves")) => #118
    #117, #118 -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=TestPulse)) => #1
        #0, #1 -> IntProperty(Value=100) => #2
        ExternalizedMapping(Mask(DisplayName=TestValve)) => #3
        #2, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
        -> MulticastSubject Commands => #5
        #5, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput

SubscribeSubject TrialStatistics
-> VisualizerMapping => #2
GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics
    -> Visualizer "Response Stat"
        WorkflowInput Source1
        -> TwoAfcStatistics => #1
        -> MemberSelector(Selector=LeftHits)
        -> MulticastSubject LeftHitCounter
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(value as LeftHits, Timestamp as Timestamp)
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Timestamp
          ValueSelector=LeftHits
          SymbolType=Circle
          LineWidth=2
          CurveSettings(CurveConfiguration(Color=Red))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping => #7
        #1 -> MemberSelector(Selector=RightHits)
        -> MulticastSubject RightHitCounter
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(value as RightHits, Timestamp as Timestamp)
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Timestamp
          ValueSelector=RightHits
          SymbolType=Circle
          LineWidth=2
          CurveSettings(CurveConfiguration(Color=Blue))
          Capacity=nil
          Min=nil
          Max=nil
        -> VisualizerMapping => #13
        #7, #13 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)
        -> WorkflowOutput
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #4
GroupWorkflow HitPercentage
    SubscribeSubject LeftHitCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
      Expression: Convert.ToDouble(it)
    SubscribeSubject LeftTrialCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
      Expression: Convert.ToDouble(it)
    #1, #3 -> WithLatestFrom
    -> Divide
    -> Multiply(Operand=IntProperty(Value=100))
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      ValueSelector=it
      SymbolType=None
      LineWidth=2
      CurveSettings(CurveConfiguration(Label=LeftHitPercentage, Color=#C000C0))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping => #8
    SubscribeSubject RightHitCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression: Convert.ToDouble(it)
    SubscribeSubject RightTrialCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
      Expression: Convert.ToDouble(it)
    #10, #12 -> WithLatestFrom
    -> Divide
    -> Multiply(Operand=IntProperty(Value=100))
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      ValueSelector=it
      SymbolType=None
      LineWidth=2
      CurveSettings(CurveConfiguration(Label=RightHitPercentage, Color=#00C000))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping => #17
    SubscribeSubject TotalHitCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
      Expression: Convert.ToDouble(it)
    SubscribeSubject TotalTrialCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression: Convert.ToDouble(it)
    #19, #21 -> WithLatestFrom
    -> Divide
    -> Multiply(Operand=IntProperty(Value=100))
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      ValueSelector=it
      SymbolType=None
      LineWidth=2
      CurveSettings(CurveConfiguration(Label=TotalHitPercentage, Color=Blue))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping => #26
    #8, #17, #26 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #6
GroupWorkflow TrainingReport
    StringProperty(Value="Training Parameters - ") => #0
    StringProperty(Value=" Blocks: ") => #1
    SubscribeSubject NumberOfBlocks
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
      Expression: Convert.ToString(it)
    StringProperty(Value="  Hits per block/side: ") => #4
    SubscribeSubject BlockHitNumber
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression: Convert.ToString(it)
    StringProperty(Value="  Number of hits to reach: ") => #7
    SubscribeSubject TotalHitLimit
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
      Expression: Convert.ToString(it)
    #0, #1, #3, #4, #6, #7, #9 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder
      Enabled=true
      Visible=true
      Font="Microsoft Sans Serif, 12pt"
      Text="Training Parameters -  Blocks: 5  Hits per block/side: 30  Number of hits to reach: 300"
    -> VisualizerMapping => #14
    StringProperty(Value="Counter -  Hit: ") => #15
    SubscribeSubject TotalHitCounter
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
      Expression: Convert.ToString(it)
    StringProperty(Value="  Miss: ") => #18
    SubscribeSubject PreviousResponse => #19
    -> Condition Miss
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<ResponseId>(Value=Miss))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> Prepend(Operand=StringProperty(Value=0)) => #24
    StringProperty(Value="  Incorrect Actions: ") => #25
    #19 -> Condition IncorrectAction
        WorkflowInput Source1
        -> Equal(Operand=WorkflowProperty<ResponseId>(Value=IncorrectAction))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> Prepend(Operand=StringProperty(Value=0)) => #30
    #15, #17, #18, #24, #25, #30 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", Text="Counter -  Hit: 8  Miss: 1  Incorrect Actions: 0")
    -> VisualizerMapping => #35
    #14, #35 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> VisualizerMapping => #8
#2, #4, #6, #8 -> Bonsai.Gui.TableLayoutPanelBuilder
  Enabled=true
  Visible=true
  ColumnCount=3
  RowCount=2
  ColumnStyles=""
  RowStyles(RowStyle(SizeType=Percent, Height=85), RowStyle(SizeType=Percent, Height=15))
  CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
-> Bonsai.Design.VisualizerWindow(Text="2AFC Interface", Visible=true, Location(X=300, Y=300), Size(Width=800, Height=400), WindowState=nil)

Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=\BehaviorVid_Side1.avi))
-> Disable PropertyMapping(FileName) => #13
Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #14
#13, #14 -> Disable Bonsai.Vision.VideoWriter
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260202-Pretrain9\2026-02-02T14-49-13\BehaviorVid_Side1.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=100
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/VidFrames_Top.csv))
-> Disable PropertyMapping(FileName) => #18
#14 -> Disable Timestamp
-> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #20
#20, #14 -> Disable Zip => #21
#18, #21 -> Disable Bonsai.IO.CsvWriter
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\Test/260211-Train6\2026-03-04T14-53-55/VidFrames_Top.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=true

Disable Neurophotometrics.V2.FP3002 => #23
  AcquisitionMode=StartPhotometry
  PortName=COMx
  Regions
    PhotometryRegion(Index=0, Channel=Red, Rectangle(Location(X=211, Y=370), Size(Width=70, Height=70), X=211, Y=370, Width=70, Height=70), Name=R0)
    PhotometryRegion(Index=1, Channel=Green, Rectangle(Location(X=834, Y=338), Size(Width=84, Height=80), X=834, Y=338, Width=84, Height=80), Name=G1)
-> Disable Neurophotometrics.V2.PhotometryData(VisualizerSettings(PlotSettings="", Capacity=1000)) => #24
-> Disable PublishSubject Photometry
#24 -> Disable Timestamp => #26
-> Disable MemberSelector(Selector=Value.FrameCounter) => #27
#26 -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #28
#27, #28 -> Disable Zip => #29
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/Frames.csv))
-> Disable PropertyMapping(FileName) => #32
#29, #32 -> Disable Bonsai.IO.CsvWriter
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT026/251219-FP5\2025-12-23T15-02-05/Frames.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
#23 -> Disable MemberSelector(Selector=MessageBytes) => #34
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/FP3002Registers.bin))
-> Disable PropertyMapping(Path) => #37
#34, #37 -> Disable Bonsai.Dsp.MatrixWriter
  Path=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT026/251219-FP5\2025-12-23T15-02-05/FP3002Registers.bin
  Suffix=Timestamp
  Overwrite=false
  Layout=ColumnMajor
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/Photometry_.csv))
-> Disable PropertyMapping(FileName) => #41
#41, #24 -> Disable Neurophotometrics.V2.PhotometryWriter
  IncludeRegions=false
  IncludePlots=false
  IncludeVideo=false
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT026/251219-FP5\2025-12-23T15-02-05/Photometry_.csv
  Suffix=None
