WorkflowBuilder(Version=2.9.0)
GroupWorkflow TwoToneExperiment
    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #7
    ExternalizedMapping => #8
      HoldPeriod
      "Percentage Left Trials"
      "Pulse Period(ms)"
      "Right Response Window (s)"(DisplayName="Right Timeout")
      "Right Timeout"(DisplayName="Right Penalty")
      "Left Response Window"(DisplayName="Left Timeout")
      "Left Timeout"(DisplayName=LeftPenalty)
      "Lower Left Tone Index"(DisplayName="Lower Left Tone Index", Category="Left Tone")
      "Upper Left Tone Index"(Category="Left Tone")
      "Upper Right Tone Index"(Category="Right Tone")
      "Lower Right Tone Index"(Category="Right Tone")
    #7, #8 -> CreateObservable CreateTrial => #9
        SubscribeSubject TrialDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #3
        ExternalizedMapping(HoldPeriod) => #4
        #3, #4 -> SelectMany StartTrial
            SubscribeSubject CenterLick => #0
            ExternalizedMapping(HoldPeriod) => #1
            #0, #1 -> SelectMany HoldPeriod
                ExternalizedMapping(DueTime(DisplayName=HoldPeriod))
                -> Timer(DueTime=PT0.1S)
                -> BooleanProperty(Value=true)
                -> GroupWorkflow Proceed => #3
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject CenterExit
                -> BooleanProperty(Value=false)
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
                -> GroupWorkflow EarlyExit => #7
                    WorkflowInput Source1
                    -> WorkflowOutput
                #3, #7 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> Condition Proceed
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Take(Count=1)
        -> SelectMany SampleTrialType => #7
            SubscribeSubject TrialDistribution
            -> Bonsai.Numerics.Distributions.Sample
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName="Percentage Left Trials")) => #8
        #7, #8 -> LessThanOrEqual(Operand=IntProperty(Value=-1)) => #9
        -> Condition LeftPort
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Left) => #11
        ExternalizedMapping("Lower Left Tone Index", "Upper Left Tone Index") => #12
        #11, #12 -> SelectMany StimulusPresentation => #13
            WorkflowInput Source1 => #0
            ExternalizedMapping(Lower(DisplayName="Lower Left Tone Index"), Upper(DisplayName="Upper Left Tone Index"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
            -> Bonsai.Numerics.Distributions.Sample
            -> PropertyMapping(SoundIndex) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=2)
            -> MulticastSubject AllToneTick => #6
            ExternalizedMapping(DueTime(DisplayName=SoundDuration)) => #7
            #6, #7 -> Delay(DueTime=PT0.1S)
            -> BooleanProperty(Value=true) => #9
            Disable SubscribeSubject CenterExit
            -> Disable TrialResponse(Response=EarlyExit)
            -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyExit)
            -> Disable BooleanProperty(Value=false) => #13
            #9, #13 -> Disable TakeUntil
            -> Take(Count=1)
            -> WorkflowOutput

            Bonsai.Dsp.FunctionGenerator(BufferLength=192000, Frequency=800, Waveform=Sine, SampleRate=192000, Depth=S32, Amplitude=8000000, Offset=0, Phase=0)
            -> Take(Count=1)
            -> Harp.SoundCard.UpdateSoundWaveform(DeviceIndex=nil, SoundIndex=2, SoundName=2, SampleRate=SampleRate192000Hz)
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response) => #15
        ExternalizedMapping("Left Response Window", DueTime(DisplayName="Left Timeout")) => #16
        #15, #16 -> SelectMany WaitForLick => #17
            SubscribeSubject RightLick
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT1S) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Left Response Window"))
            -> Timer(DueTime=PT10S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput

            SubscribeSubject CenterExit
            -> IncludeWorkflow(Path=Extensions\LogAnnotation.bonsai, Id=Response)
        -> Condition Hit => #18
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping("Pulse Period(ms)") => #19
        #18, #19 -> GroupWorkflow PulseValve
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=40)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit)
        -> TrialResponse(Response=Hit) => #22
        #17 -> Condition IncorrectAction
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
        -> TrialResponse(Response=IncorrectAction) => #25
        #17 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss)
        -> TrialResponse(Response=Miss) => #28
        #9 -> Condition RightPort
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Right) => #30
        ExternalizedMapping("Upper Right Tone Index", "Lower Right Tone Index") => #31
        #30, #31 -> SelectMany StimulusPresentation
            WorkflowInput Source1 => #0
            ExternalizedMapping(Lower(DisplayName="Lower Right Tone Index"), Upper(DisplayName="Upper Right Tone Index"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=6, Upper=6)
            -> Bonsai.Numerics.Distributions.Sample
            -> PropertyMapping(SoundIndex) => #4
            #0, #4 -> IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=6)
            -> MulticastSubject AllToneTick => #6
            ExternalizedMapping(DueTime(DisplayName=SoundDuration)) => #7
            #6, #7 -> Delay(DueTime=PT0.1S)
            -> BooleanProperty(Value=true) => #9
            Disable SubscribeSubject CenterExit
            -> Disable TrialResponse(Response=EarlyExit)
            -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyExit)
            -> Disable BooleanProperty(Value=true) => #13
            #9, #13 -> Disable TakeUntil
            -> First
            -> WorkflowOutput

            Disable Bonsai.Dsp.FunctionGenerator(BufferLength=192000, Frequency=1000, Waveform=Sine, SampleRate=192000, Depth=S32, Amplitude=8000000, Offset=0, Phase=0)
            -> Disable Take(Count=1)
            -> Disable Harp.SoundCard.UpdateSoundWaveform(DeviceIndex=nil, SoundIndex=10, SoundName=10, SampleRate=SampleRate192000Hz)
        -> Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response) => #34
        ExternalizedMapping("Right Response Window (s)", DueTime(DisplayName="Right Timeout")) => #35
        #34, #35 -> SelectMany WaitForLick => #36
            SubscribeSubject LeftLick
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT1S) => #4
            SubscribeSubject RightLick
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Right Response Window (s)"))
            -> Timer(DueTime=PT3S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput

            SubscribeSubject CenterExit
            -> IncludeWorkflow(Path=Extensions\LogAnnotation.bonsai, Id=Response)
        -> Condition Hit => #37
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #37, #19 -> GroupWorkflow PulseValve
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=40)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit)
        -> TrialResponse(Response=Hit) => #40
        #36 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss)
        -> TrialResponse(Response=Miss) => #43
        #36 -> Condition IncorrectAction
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=IncorrectAction)
        -> TrialResponse(Response=IncorrectAction) => #46
        #22, #25, #28, #40, #43, #46 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput
        #18 -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it > 0
        -> Disable SelectMany TriggerPulse_hit => #51
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #51 -> Disable CombineLatest
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new (it.Item1, it.Item2)
        -> Disable BooleanProperty(Value=false)
        -> Disable Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=HardwareTimedSinglePoint
          BufferSize=1000
          Channels
            DigitalOutputChannelConfiguration(ChannelName=Sound, Grouping=OneChannelForEachLine, Lines=BNC2110/P0.0)
            DigitalOutputChannelConfiguration(ChannelName=Hit, Grouping=OneChannelForEachLine, Lines=BNC2110/P0.1)

        WorkflowInput Source1

        Disable SubscribeSubject Joystick => #57
        Disable SubscribeSubject NoGo => #58
        #57, #58 -> Disable SubscribeWhen => #59
        -> Disable Take(Count=1) => #60
        #59, #60 -> Disable CombineLatest
        -> Disable Subtract
        -> Disable Bonsai.Numerics.Abs => #63
        Disable ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #64
        #63, #64 -> Disable GreaterThan(Operand=DoubleProperty(Value=5))
        -> Disable Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable PublishSubject NoGoThreshold
    Disable SubscribeSubject StartTrigger => #10
    #9, #10 -> Disable SubscribeWhen => #11
    ExternalizedMapping(Count(DisplayName="Number of Trials", Category="Experiment Control")) => #12
    #11, #12 -> Take(Count=250)
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #16
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #19
    #16, #19 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/ResponseStat.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai) => #25
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #26
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #28
    Source1=#26, Source1=#28 -> StateTransition(Trial=85, Id=LickRight, ElapsedTime=1478908.478976) => #29
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #25 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #34
    #29 -> DistinctUntilStateChanged => #35
    #34, #35 -> Zip => #36
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/StateTransitions.csv))
    -> PropertyMapping(FileName) => #39
    #36, #39 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/StateTransitions.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    SubscribeSubject Sounds
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #47
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/sounds.csv))
    -> PropertyMapping(FileName) => #50
    #47, #50 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/sounds.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false

    ExternalizedMapping(Value(DisplayName=Path, Category="Experiment Control"))
    -> PropertySource<Bonsai.IO.EnumerateFiles,System.String>(MemberName=Path, Value=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025)
    -> Add(Operand=StringProperty(Value=/251211-FP2))
    -> Timestamp
    -> Format(Format={0}\{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp")
    -> BehaviorSubject Path

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    ExternalizedMapping
      "Behavior Port"(Category="Behavior Board")
      "Center Port"(Category="Behavior Board")
      "Threshold Lick Left"(Category="Behavior Board")
      "Threshold Lick Right"(Category="Behavior Board")
    -> GroupWorkflow HarpBehavior
        SubscribeSubject Commands => #0
        ExternalizedMapping(PortName(DisplayName="Behavior Port")) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM10) => #2
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> PublishSubject Timestamp
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
        -> PublishSubject StartTrigger
        ExternalizedMapping(Mask(DisplayName="Center Port")) => #7
        #2, #7 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Center
        #2 -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData) => #10
        -> MemberSelector(Selector=AnalogInput0)
        -> Bonsai.Dsp.FirFilter(Anchor=-1, Kernel="1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1") => #12
        ExternalizedMapping(Value(DisplayName="Threshold Lick Left")) => #13
        #12, #13 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=150))
        -> DistinctUntilChanged
        -> PublishSubject Left
        #10 -> MemberSelector(Selector=AnalogInput1)
        -> Bonsai.Dsp.FirFilter(Anchor=-1, Kernel="1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1") => #18
        ExternalizedMapping(Value(DisplayName="Threshold Lick Right")) => #19
        #18, #19 -> GreaterThan(Operand=WorkflowProperty<System.Int16>(Value=150))
        -> DistinctUntilChanged
        -> PublishSubject Right
        #2 -> MemberSelector(Selector=MessageBytes) => #23
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #26
        #23, #26 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/Joystick.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

    ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category=Soundcard))
    -> GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #6
        #3, #6 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/soundcard.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick

    SubscribeSubject Center
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject CenterLick

    SubscribeSubject Left
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject LeftLick

    SubscribeSubject Right
    -> Equal(Operand=BooleanProperty(Value=true))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RightLick

    SubscribeSubject Center
    -> Equal(Operand=BooleanProperty(Value=false))
    -> Condition Exit
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject CenterExit

    SubscribeSubject CenterLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickCenter)

    SubscribeSubject LeftLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickLeft)

    SubscribeSubject RightLick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=LickRight)

    ExternalizedMapping(Filter(DisplayName="Key ValveTest", Category="Test Valves"))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false) => #93
    ExternalizedMapping(TestPulse(Category="Test Valves"), TestValve(Category="Test Valves")) => #94
    #93, #94 -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=TestPulse)) => #1
        #0, #1 -> IntProperty(Value=100) => #2
        ExternalizedMapping(Mask(DisplayName=TestValve)) => #3
        #2, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
        -> MulticastSubject Commands => #5
        #5, #3 -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke2Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput

SubscribeSubject TrialStatistics
-> VisualizerMapping => #2
GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics => #0
    ExternalizedMapping(Count) => #1
    #0, #1 -> BufferCount(Count=20, Skip=1) => #2
    #0, #1 -> Take(Count=20)
    -> IncrementalBuffer => #4
    #2, #4 -> Merge
    -> Visualizer "Response Stat"
        WorkflowInput Source1
        -> TwoAfcStatistics
        -> WorkflowOutput
    -> WorkflowOutput
-> Disable VisualizerMapping(VisualizerType=TypeMapping<TwoAfcVisualizer>) => #4
#2, #4 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
-> Bonsai.Design.VisualizerWindow(Text="2AFC Interface", Visible=true, Location=nil, Size=nil, WindowState=nil)

SubscribeSubject Path
-> Add(Operand=StringProperty(Value=\BehaviorVid_Side1.avi))
-> PropertyMapping(FileName) => #9
Bonsai.Vision.CameraCapture(Index=2, CaptureProperties="") => #10
#9, #10 -> Bonsai.Vision.VideoWriter
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31\BehaviorVid_Side1.avi
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=100
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/VidFrames_Top.csv))
-> PropertyMapping(FileName) => #14
#10 -> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #16
#16, #10 -> Zip => #17
#14, #17 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/VidFrames_Top.csv
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=true

Neurophotometrics.V2.FP3002 => #19
  AcquisitionMode=StartPhotometry
  PortName=COM3
  Regions
    PhotometryRegion(Index=0, Channel=Red, Rectangle(Location(X=214, Y=365), Size(Width=66, Height=64), X=214, Y=365, Width=66, Height=64), Name=R0)
    PhotometryRegion(Index=1, Channel=Green, Rectangle(Location(X=959, Y=432), Size(Width=84, Height=78), X=959, Y=432, Width=84, Height=78), Name=G1)
-> Neurophotometrics.V2.PhotometryData => #20
  VisualizerSettings
    PlotSettings
      PlotSetting
        PhotometryRegion(Index=0, Channel=Red, Rectangle(Location(X=214, Y=365), Size(Width=66, Height=64), X=214, Y=365, Width=66, Height=64), Name=R0)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
      PlotSetting
        PhotometryRegion(Index=1, Channel=Green, Rectangle(Location(X=959, Y=432), Size(Width=84, Height=78), X=959, Y=432, Width=84, Height=78), Name=G1)
        IsVisible=true
        SignalSettings
          SignalSetting(Name=L470, LEDFlag=L470, IsVisible=true, Scaling(Mode=Auto, Min=0, Max=1))
          SignalSetting(Name=L560, LEDFlag=L560, IsVisible=false, Scaling(Mode=Auto, Min=0, Max=1))
    Capacity=1000
-> PublishSubject Photometry
#20 -> Timestamp => #22
-> MemberSelector(Selector=Value.FrameCounter) => #23
#22 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #24
#23, #24 -> Zip => #25
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/Frames.csv))
-> PropertyMapping(FileName) => #28
#25, #28 -> Bonsai.IO.CsvWriter
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/Frames.csv
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
#19 -> MemberSelector(Selector=MessageBytes) => #30
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/FP3002Registers.bin))
-> PropertyMapping(Path) => #33
#30, #33 -> Bonsai.Dsp.MatrixWriter
  Path=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/FP3002Registers.bin
  Suffix=Timestamp
  Overwrite=false
  Layout=ColumnMajor
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/Photometry_.csv))
-> PropertyMapping(FileName) => #37
#37, #20 -> Neurophotometrics.V2.PhotometryWriter
  IncludeRegions=false
  IncludePlots=false
  IncludeVideo=false
  FileName=C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT025/251211-FP2\2025-12-11T17-48-31/Photometry_.csv
  Suffix=None
